PsychoPy2experiment version="2020.1.2"
Settings
  Data filename = $os.path.relpath(os.path.join(os.path.expanduser('~'), 'Dropbox (PfeiBer Lab)', 'Devaluation', 'Tasks', 'ROC', 'output', expName + expInfo['participant'] + '_' + expInfo['session'] + '_run' + expInfo['run_number'] + '_' + data.getDateStr(format='%d-%b-%Y_%H-%M')))
  Experiment info = {'participant': '', 'session': '', 'run_number': ''}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 720]
  color = $[-1,-1,-1]
  expName = DEV
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Routines
  Routine trial
    PolygonComponent fixation
      durationEstim = 1
      fillColor = $[1,1,1]
      saveStartStop = False
      shape = cross
      size = (48, 48)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $jitter_duration
      units = pix
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    PolygonComponent background
      fillColor [set every repeat] = $background_color
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = (window_width, window_height)
      startEstim = 1
      startVal [time (s)] = $jitter_duration
      stopVal [duration (s)] = 9.5
      units = pix
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    PolygonComponent black_background
      fillColor = $[-1,-1,-1]
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = (window_width - 150, window_height - 150)
      startEstim = 1
      startVal [time (s)] = $jitter_duration
      stopVal [duration (s)] = 9.5
      units = pix
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    ImageComponent reappraise_look
      image [set every repeat] = $reappraise_or_look
      saveStartStop = False
      startEstim = 1
      startVal [time (s)] = $jitter_duration
      stopVal [duration (s)] = 2
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    ImageComponent stimulus
      image [set every repeat] = $image_file
      startEstim = 3
      startVal [time (s)] = $jitter_duration + 2
      stopVal [duration (s)] = 5.0
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    ImageComponent rating_image
      image = Resources/rate.jpg
      startEstim = 8
      startVal [time (s)] = $jitter_duration + 7
      stopVal [duration (s)] = 2.5
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    KeyboardComponent rating_response
      allowedKeys = '1','2','3','4'
      forceEndRoutine = False
      startEstim = 8
      startVal [time (s)] = $jitter_duration + 7
      stopVal [duration (s)] = 2.5
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  Routine instructions
    TextComponent start_text
      durationEstim = 2
      letterHeight = 0.075
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = $start_text_str
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    KeyboardComponent start_trigger
      durationEstim = 2
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine end
    TextComponent end_text
      letterHeight = 0.075
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text = The task is now complete.
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  Routine setup
    CodeComponent get_window_size
      Code Type = Auto->JS
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      Begin Experiment:
        # Get window width and height
        window_width = win.clientSize[0]
        window_height = win.clientSize[1]
    CodeComponent get_conditions_file
      Code Type = Auto->JS
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      Begin Experiment:
        def is_mri_session(session: str) -> bool:
            return session == '1' or session == '2'


        participant = expInfo['participant']
        session = expInfo['session']
        run_number = expInfo['run_number']

        #
        # Determine the input conditions file based on the session number.
        # Session numbers 1 and 2 are in the MRI scanner.
        # Session numbers 3, 4, and 5 are behavorial, not performed in the scanner.
        # Display different start text / instructions for behavioral sessions compared with MRI scan sessions.
        if is_mri_session(session):
            session_type = 'scan'
            start_text_str = 'Calibrating scanner.\nPlease hold VERY still.'
        else:
            session_type = 'beh'
            start_text_str = 'The task is about to begin.\nGet ready!'
        conditions_file = 'ROC_R' + str(run_number) + session_type + '.csv'

        # If a practice run
        if run_number == '0':
            conditions_file = 'ROC_practice.csv'
            continueRoutine = False
    CodeComponent get_stimulus_files
      Code Type = Auto->JS
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      Begin Experiment:
        #
        # Custom code to get stimulus files based on output of ImageSelection task.
        #
        import os
        import re
        import shutil
        from datetime import datetime
        from operator import itemgetter
        from numpy.random import shuffle


        # On the first run, do a bunch of work to get the image ratings,
        # then move images to be displayed to the participant.
        if run_number == '1':
            # read subject's category ratings file
            image_selection_output = os.path.join(os.path.expanduser('~'), 'Dropbox (PfeiBer Lab)', 'Devaluation', 'Tasks',
                                                  'ImageSelection', 'output', 'Categorized', 'DEV' + participant + '_ratings.csv')
            image_selection = []
            with open(image_selection_output) as f:
                for line in f:
                    rating, category, file_name = line.strip().split(',')
                    # Recode category 0 (non-craved) food to 4, so when sorting, the most craved foods
                    # are at the beginning and the non-craved foods are at the end.
                    if category == '0':
                        category = '4'
                    image_selection.append([rating, category, file_name])

            # image_selection output is a CSV file with three fields: rating, image category, image file name.
            # Image categories 1, 2, 3 are craved foods. Image category 4 is not craved.
            # Sort by rating, then reverse sort by category, so it is easy to select the 20 least craved images
            # (which are near the beginning of the sorted list) and the 40 images of craved foods with the
            # highest ratings (which are at the end of the sorted list)
            image_selection.sort(key=itemgetter(1), reverse=True)
            image_selection.sort(key=itemgetter(0))

            num_craved = 40
            num_non_craved = 20
            craved = []
            non_craved = []
            for i, (rating, _, _) in enumerate(image_selection):
                if rating != '0':
                    if len(image_selection[i:]) < num_craved + num_non_craved:
                        # Use some zero-rated items
                        non_craved_start = i - (num_craved + num_non_craved - len(image_selection[i:]))
                    else:
                        non_craved_start = i

                    non_craved_end = non_craved_start + num_non_craved

                    non_craved = image_selection[non_craved_start:non_craved_end]
                    craved = image_selection[-num_craved:]
                    break

            shuffle(craved)
            shuffle(non_craved)

            # move them to ROC/Resources folder, renaming images to crave01 to crave40.jpg, and nocrave01 to nocrave20.jpg
            stimulus_key = []
            roc_path = os.getcwd()
            for i, image_file in enumerate(craved, start=1):
                pattern = r'\A\D+'
                image_name = image_file[2]
                result = re.match(pattern, image_name)
                category_name = result.group()
                new_image_name = f'crave{i:02d}.jpg'
                shutil.copyfile(os.path.join(roc_path, 'Stimuli', category_name, image_name),
                                os.path.join(roc_path, 'Resources', new_image_name))
                stimulus_key.append((new_image_name, image_name, category_name))

            for i, image_file in enumerate(non_craved, start=1):
                pattern = r'\A\D+'
                image_name = image_file[2]
                result = re.match(pattern, image_name)
                category_name = result.group()
                new_image_name = f'nocrave{i:02d}.jpg'
                shutil.copyfile(os.path.join(roc_path, 'Stimuli', category_name, image_name),
                                os.path.join(roc_path, 'Resources', new_image_name))
                stimulus_key.append((new_image_name, image_name, category_name))

            # create a stimulus key file, mapping renamed image (e.g., crave01)
            # to original image (Chocolate22.jpg) and category (Chocolate)
            output_dir = os.path.join(os.path.expanduser('~'), 'Dropbox (PfeiBer Lab)', 'Devaluation', 'Tasks', 'ROC', 'output')
            timestamp = data.getDateStr(format='%d-%b-%Y_%H-%M')
            stimulus_key_file = f'DEV{participant}_{session}_stimuli_{timestamp}.csv'
            with open(os.path.join(output_dir, stimulus_key_file), mode='w') as f:
                for s in stimulus_key:
                    f.write(f'{s[0]},{s[1]},{s[2]}\n')
Flow
  Routine setup
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = $conditions_file
    loopType = sequential
    nReps = 1
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    Routine trial
  LoopTerminator trials
  Routine end
